OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

GDF file reader => #0
  Filename = C:/Users/rishi/OneDrive/Desktop/BCICIV_2b_gdf/B0101T.gdf
  Samples per buffer = 32
#0.EEG stream -> Identity => #1
#0.EEG stream -> Channel Selector "1:3"
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Index
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Signal Power Log
-> Feature aggregator => #5
Features=#5 -> Classifier processor => #6
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifier.xml
#6.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input stream 1=#1, Input stream 2=#6.Labels -> Identity => #8
#8.Output stream 1 -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /move
Input stream=#8.Output stream 1, Stimulations stream=#8.Output stream 2 -> CSV File Writer
  Filename = C:/Users/rishi/OneDrive/Documents/OpenVibe/output.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
#6.Labels -> Stimulation listener
  Log level to use = Information
