OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #1
  Equation = sin(x)
-> Threshold Crossing Detector => #2
  Threshold = 0
  Cross over threshold = OVTK_StimulationId_Label_00
  Cross under threshold = OVTK_StimulationId_Label_01
  Channel Index = 1
#0 -> Simple DSP => #3
  Equation = cos(x)
Input 1=#1, Input 2=#3 -> Signal Merger => #4
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /cube/move
#3 -> Threshold Crossing Detector => #7
  Threshold = 0
  Cross over threshold = OVTK_StimulationId_Label_02
  Cross under threshold = OVTK_StimulationId_Label_03
  Channel Index = 1
Input stimulations 1=#2, Input stimulations 2=#7 -> Stimulation multiplexer => #8
Data=#4, Stimulations=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input 1=#2, Input 2=#7 -> Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_03
